<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SourceFromBin">
          <p1:FilePath>C:/Users/miche/OneDrive/Documents/01 Uni/REIT4841/Data/VALIDATION_1minfrom15/continuous.bin</p1:FilePath>
          <p1:BufferSize>30</p1:BufferSize>
          <p1:NumChannels>385</p1:NumChannels>
          <p1:Frequency>30000</p1:Frequency>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>21</dsp:int>
            <dsp:int>77</dsp:int>
            <dsp:int>10</dsp:int>
            <dsp:int>173</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Butterworth">
          <dsp:SampleRate>30000</dsp:SampleRate>
          <dsp:Cutoff1>500</dsp:Cutoff1>
          <dsp:Cutoff2>0</dsp:Cutoff2>
          <dsp:FilterOrder>3</dsp:FilterOrder>
          <dsp:FilterType>HighPass</dsp:FilterType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Scale>1</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SpikeDetector">
          <p1:Delay>20</p1:Delay>
          <p1:Length>60</p1:Length>
          <p1:Threshold>
            <p1:double>-3932138</p1:double>
            <p1:double>-1703963</p1:double>
            <p1:double>-2424904</p1:double>
            <p1:double>8</p1:double>
            <p1:double>-2293796</p1:double>
          </p1:Threshold>
          <p1:WaveformRefinement>AlignPeaks</p1:WaveformRefinement>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:/Users/miche/OneDrive/Documents/01 Uni/REIT4841/Data/Timestamps_Next/05_spike_detector.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>true</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:/Users/miche/OneDrive/Documents/01 Uni/REIT4841/Data/Timestamps_Next/04_convert_scale.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>true</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:/Users/miche/OneDrive/Documents/01 Uni/REIT4841/Data/Timestamps_Next/03_butterworth.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>true</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:/Users/miche/OneDrive/Documents/01 Uni/REIT4841/Data/Timestamps_Next/02_select_channels.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>true</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay.TotalMilliseconds</Selector>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:/Users/miche/OneDrive/Documents/01 Uni/REIT4841/Data/Timestamps_Next/01_source.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>true</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="17" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="14" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="11" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="8" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>