<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:onix1="clr-namespace:OpenEphys.Onix1;assembly=OpenEphys.Onix1"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:CreateContext">
          <onix1:Driver>riffa</onix1:Driver>
          <onix1:Index>0</onix1:Index>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:ConfigureHeadstage64">
          <onix1:Name>Headstage64</onix1:Name>
          <onix1:Rhd2164>
            <onix1:DeviceName>Headstage64/Rhd2164</onix1:DeviceName>
            <onix1:DeviceAddress>512</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:DspCutoff>Dsp146mHz</onix1:DspCutoff>
            <onix1:AnalogLowCutoff>Low100mHz</onix1:AnalogLowCutoff>
            <onix1:AnalogHighCutoff>High10000Hz</onix1:AnalogHighCutoff>
          </onix1:Rhd2164>
          <onix1:Bno055>
            <onix1:DeviceName>Headstage64/Bno055</onix1:DeviceName>
            <onix1:DeviceAddress>513</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
          </onix1:Bno055>
          <onix1:TS4231>
            <onix1:DeviceName>Headstage64/TS4231V1</onix1:DeviceName>
            <onix1:DeviceAddress>514</onix1:DeviceAddress>
            <onix1:Enable>false</onix1:Enable>
          </onix1:TS4231>
          <onix1:ElectricalStimulator>
            <onix1:DeviceName>Headstage64/Headstage64ElectricalStimulator</onix1:DeviceName>
            <onix1:DeviceAddress>515</onix1:DeviceAddress>
          </onix1:ElectricalStimulator>
          <onix1:OpticalStimulator>
            <onix1:DeviceName>Headstage64/Headstage64OpticalStimulator</onix1:DeviceName>
            <onix1:DeviceAddress>516</onix1:DeviceAddress>
          </onix1:OpticalStimulator>
          <onix1:Port>PortB</onix1:Port>
          <onix1:PortVoltage xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:ConfigureBreakoutBoard">
          <onix1:Name>BreakoutBoard</onix1:Name>
          <onix1:Heartbeat>
            <onix1:DeviceName>BreakoutBoard/Heartbeat</onix1:DeviceName>
            <onix1:DeviceAddress>0</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:BeatsPerSecond>10</onix1:BeatsPerSecond>
          </onix1:Heartbeat>
          <onix1:AnalogIO>
            <onix1:DeviceName>BreakoutBoard/BreakoutAnalogIO</onix1:DeviceName>
            <onix1:DeviceAddress>6</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
            <onix1:InputRange0>TenVolts</onix1:InputRange0>
            <onix1:InputRange1>TenVolts</onix1:InputRange1>
            <onix1:InputRange2>TenVolts</onix1:InputRange2>
            <onix1:InputRange3>TenVolts</onix1:InputRange3>
            <onix1:InputRange4>TenVolts</onix1:InputRange4>
            <onix1:InputRange5>TenVolts</onix1:InputRange5>
            <onix1:InputRange6>TenVolts</onix1:InputRange6>
            <onix1:InputRange7>TenVolts</onix1:InputRange7>
            <onix1:InputRange8>TenVolts</onix1:InputRange8>
            <onix1:InputRange9>TenVolts</onix1:InputRange9>
            <onix1:InputRange10>TenVolts</onix1:InputRange10>
            <onix1:InputRange11>TenVolts</onix1:InputRange11>
            <onix1:Direction0>Input</onix1:Direction0>
            <onix1:Direction1>Input</onix1:Direction1>
            <onix1:Direction2>Input</onix1:Direction2>
            <onix1:Direction3>Input</onix1:Direction3>
            <onix1:Direction4>Input</onix1:Direction4>
            <onix1:Direction5>Input</onix1:Direction5>
            <onix1:Direction6>Input</onix1:Direction6>
            <onix1:Direction7>Input</onix1:Direction7>
            <onix1:Direction8>Input</onix1:Direction8>
            <onix1:Direction9>Input</onix1:Direction9>
            <onix1:Direction10>Input</onix1:Direction10>
            <onix1:Direction11>Input</onix1:Direction11>
          </onix1:AnalogIO>
          <onix1:DigitalIO>
            <onix1:DeviceName>BreakoutBoard/BreakoutDigitalIO</onix1:DeviceName>
            <onix1:DeviceAddress>7</onix1:DeviceAddress>
            <onix1:Enable>true</onix1:Enable>
          </onix1:DigitalIO>
          <onix1:MemoryMonitor>
            <onix1:DeviceName>BreakoutBoard/MemoryMonitor</onix1:DeviceName>
            <onix1:DeviceAddress>10</onix1:DeviceAddress>
            <onix1:Enable>false</onix1:Enable>
            <onix1:SamplesPerSecond>10</onix1:SamplesPerSecond>
          </onix1:MemoryMonitor>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:StartAcquisition">
          <onix1:ReadSize>2048</onix1:ReadSize>
          <onix1:WriteSize>2048</onix1:WriteSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:BreakoutDigitalInput">
          <onix1:DeviceName>BreakoutBoard/BreakoutDigitalIO</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>HubClock</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>DigitalInputs</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>\\shares01.rdm.uq.edu.au\CW_HDR_LUCHA_CTFB-Q7430\experiments\bonsai\output\digital_in_clock_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:MemoryMonitorData">
          <onix1:DeviceName>BreakoutBoard/MemoryMonitor</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>PercentUsed</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:Bno055Data">
          <onix1:DeviceName>Headstage64/Bno055</onix1:DeviceName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>EulerAngle</Selector>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity xsi:nil="true" />
        <viz:Min xsi:nil="true" />
        <viz:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Quaternion</Selector>
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity xsi:nil="true" />
        <viz:Min xsi:nil="true" />
        <viz:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:Rhd2164Data">
          <onix1:DeviceName>Headstage64/Rhd2164</onix1:DeviceName>
          <onix1:BufferSize>30</onix1:BufferSize>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>\\shares01.rdm.uq.edu.au\CW_HDR_LUCHA_CTFB-Q7430\experiments\bonsai\output\rhd2164-clock_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AuxData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>\\shares01.rdm.uq.edu.au\CW_HDR_LUCHA_CTFB-Q7430\experiments\bonsai\output\rhd2164-aux_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>\\shares01.rdm.uq.edu.au\CW_HDR_LUCHA_CTFB-Q7430\experiments\bonsai\output\rhd2164-first-time_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector>Timestamp</io:Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AmplifierData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>1</dsp:int>
            <dsp:int>2</dsp:int>
            <dsp:int>7</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>\\shares01.rdm.uq.edu.au\CW_HDR_LUCHA_CTFB-Q7430\experiments\bonsai\output\rhd2164-ephys_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="onix1:BreakoutAnalogInput">
          <onix1:DeviceName>BreakoutBoard/BreakoutAnalogIO</onix1:DeviceName>
          <onix1:BufferSize>100</onix1:BufferSize>
          <onix1:DataType>Volts</onix1:DataType>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>AnalogData</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:SelectChannels">
          <dsp:Channels>
            <dsp:int>0</dsp:int>
            <dsp:int>1</dsp:int>
            <dsp:int>2</dsp:int>
          </dsp:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>\\shares01.rdm.uq.edu.au\CW_HDR_LUCHA_CTFB-Q7430\experiments\bonsai\output\analog-data_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>\\shares01.rdm.uq.edu.au\CW_HDR_LUCHA_CTFB-Q7430\experiments\bonsai\output\analog-first-time_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>\\shares01.rdm.uq.edu.au\CW_HDR_LUCHA_CTFB-Q7430\experiments\bonsai\output\analog-clock_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>HubClock</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>\\shares01.rdm.uq.edu.au\CW_HDR_LUCHA_CTFB-Q7430\experiments\bonsai\output\analog-hub-clock_.raw</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="8" Label="Source2" />
      <Edge From="7" To="8" Label="Source3" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="17" To="20" Label="Source1" />
      <Edge From="17" To="22" Label="Source1" />
      <Edge From="17" To="25" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="28" To="32" Label="Source1" />
      <Edge From="28" To="35" Label="Source1" />
      <Edge From="28" To="37" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>